PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = serialpositioneffect
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instruction
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study!
        In this task, you will be shown an image followed by a word. Please focus on both the image and the word. You will be asked to recall them later.
        You will also be asked to solve a few easy mathematical questions.
        Please press the SPACE KEY when you are ready to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Primacy
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    ImageComponent image
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $word
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  Routine recall
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please write down all the words that you can recall
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine IntTr
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    TextComponent operations1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opr1
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent mouse_2
      clickable = text_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please write down the right answers
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  Routine Recency
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    ImageComponent image_2
      image [set every repeat] = $imageFilee
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $word_
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  Routine recall_2
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please write down all the words that you can recall
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent mouse_3
      clickable = text_8
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine IntTr_2
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    TextComponent operations1_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opr2
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    TextboxComponent textbox_5
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent mouse_5
      clickable = text_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please write down the right answers
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  Routine Middlecy
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    ImageComponent image_3
      image [set every repeat] = $image_File
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $_word
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  Routine recall_3
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please write down all the words that you can recall
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent mouse_4
      clickable = text_13
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        -The experiment has ended-
        Thank you for your time!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = expcond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageFile': 'images/disgust_1.jpg', 'emotion': 'disgust', 'word': 'Tree  ', 'imageFilee': 'images/neutral_6.jpg', 'emotion_': 'neutral', 'word_': 'Chair', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Room'},
      {'imageFile': 'images/disgust_2.jpg', 'emotion': 'disgust', 'word': 'Wall  ', 'imageFilee': 'images/neutral_7.jpg', 'emotion_': 'neutral', 'word_': 'House', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Bench'},
      {'imageFile': 'images/disgust_3.jpg', 'emotion': 'disgust', 'word': 'Bottle  ', 'imageFilee': 'images/neutral_8.jpg', 'emotion_': 'neutral', 'word_': 'Clock', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Roof'},
      {'imageFile': 'images/disgust_4.jpg', 'emotion': 'disgust', 'word': 'Card  ', 'imageFilee': 'images/neutral_9.jpg', 'emotion_': 'neutral', 'word_': 'Door', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Cup'},
      {'imageFile': 'images/disgust_5.jpg', 'emotion': 'disgust', 'word': 'Shoe  ', 'imageFilee': 'images/neutral_10.jpg', 'emotion_': 'neutral', 'word_': 'Pen', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Plant'},
      {'imageFile': 'images/neutral_1.jpeg', 'emotion': 'neutral', 'word': 'Cloud', 'imageFilee': 'images/blank_screen.png', 'emotion_': 'none', 'word_': 'Book', 'image_File': 'images/disgust_11.jpg', '_emotion': 'disgust', '_word': 'Brick'}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
    Routine Primacy
  LoopTerminator trials
  Routine recall
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = newdistractor.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'opr1': '17+19', 'corr1': 36, 'opr2': '62+15', 'corr2': 77},
      {'opr1': '23-14', 'corr1': 9, 'opr2': '48-26', 'corr2': 22},
      {'opr1': '54+19', 'corr1': 73, 'opr2': '31+24', 'corr2': 55},
      {'opr1': '46-29', 'corr1': 17, 'opr2': '59-18', 'corr2': 41},
      {'opr1': '39-16', 'corr1': 23, 'opr2': '73+12', 'corr2': 85},
      {'opr1': '79-21', 'corr1': 58, 'opr2': '81-37', 'corr2': 44},
      {'opr1': '88-45', 'corr1': 43, 'opr2': '44+33', 'corr2': 77},
      {'opr1': '99-35', 'corr1': 64, 'opr2': '65-29', 'corr2': 36}]
    Routine IntTr
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = expcond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageFile': 'images/disgust_1.jpg', 'emotion': 'disgust', 'word': 'Tree  ', 'imageFilee': 'images/neutral_6.jpg', 'emotion_': 'neutral', 'word_': 'Chair', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Room'},
      {'imageFile': 'images/disgust_2.jpg', 'emotion': 'disgust', 'word': 'Wall  ', 'imageFilee': 'images/neutral_7.jpg', 'emotion_': 'neutral', 'word_': 'House', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Bench'},
      {'imageFile': 'images/disgust_3.jpg', 'emotion': 'disgust', 'word': 'Bottle  ', 'imageFilee': 'images/neutral_8.jpg', 'emotion_': 'neutral', 'word_': 'Clock', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Roof'},
      {'imageFile': 'images/disgust_4.jpg', 'emotion': 'disgust', 'word': 'Card  ', 'imageFilee': 'images/neutral_9.jpg', 'emotion_': 'neutral', 'word_': 'Door', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Cup'},
      {'imageFile': 'images/disgust_5.jpg', 'emotion': 'disgust', 'word': 'Shoe  ', 'imageFilee': 'images/neutral_10.jpg', 'emotion_': 'neutral', 'word_': 'Pen', 'image_File': 'images/blank_screen.png', '_emotion': 'none', '_word': 'Plant'},
      {'imageFile': 'images/neutral_1.jpeg', 'emotion': 'neutral', 'word': 'Cloud', 'imageFilee': 'images/blank_screen.png', 'emotion_': 'none', 'word_': 'Book', 'image_File': 'images/disgust_11.jpg', '_emotion': 'disgust', '_word': 'Brick'}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
    Routine Recency
  LoopTerminator trials_3
  Routine recall_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = newdistractor.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'opr1': '17+19', 'corr1': 36, 'opr2': '62+15', 'corr2': 77},
      {'opr1': '23-14', 'corr1': 9, 'opr2': '48-26', 'corr2': 22},
      {'opr1': '54+19', 'corr1': 73, 'opr2': '31+24', 'corr2': 55},
      {'opr1': '46-29', 'corr1': 17, 'opr2': '59-18', 'corr2': 41},
      {'opr1': '39-16', 'corr1': 23, 'opr2': '73+12', 'corr2': 85},
      {'opr1': '79-21', 'corr1': 58, 'opr2': '81-37', 'corr2': 44},
      {'opr1': '88-45', 'corr1': 43, 'opr2': '44+33', 'corr2': 77},
      {'opr1': '99-35', 'corr1': 64, 'opr2': '65-29', 'corr2': 36}]
    Routine IntTr_2
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = expcond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Middlecy
  LoopTerminator trials_5
  Routine recall_3
  Routine End
